PsychoPy2experiment version="2021.2.3"
Settings
  Data filename = u'data/%s_%s' % (expName, expInfo['date'])
  Experiment info = {'': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 720]
  expName = Fear_rating
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Routines
  Routine trial
    ImageComponent image
      image [set every repeat] = $stimuli
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine rating
    SliderComponent slider_1
      forceEndRoutine = False
      granularity = 0
      labels = ('not at all',' ' ,' ' ,' ' , 'very much')
      letterHeight = 0.03
      pos = (0, 0.35)
      size = (0.8, 0.03)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    ImageComponent image_2
      image = stimuli\arousal_rating.png
      pos = (0, 0.14)
      size = (1.0, 0.2)
      startVal [time (s)] = 0.0
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    SliderComponent slider_2
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.02
      pos = (0.0, 0.00)
      size = (0.8, 0.03)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5,6,7,8,9)
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    ImageComponent image_3
      image = stimuli\valence_rating.png
      pos = (0, -0.20)
      size = (1.0, 0.2)
      startVal [time (s)] = 0.0
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    SliderComponent slider_3
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.02
      pos = (0.0, -0.35)
      size = (0.8, 0.03)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5,6,7,8,9)
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    TextComponent text
      letterHeight = 0.04
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
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      text:
        Rate the fearfulness of the picture on a scale from 1 to 5
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_14
      letterHeight = 0.03
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
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      text:
        Press SPACE after rating to continue
  Routine Intro
    TextComponent text_1
      letterHeight = 0.05
      pos = (0, 0.0)
      startVal [time (s)] = 0.0
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      text:
        In this experiment you will see some images and subsequently rate how you feel about the image.

        Press SPACE to continue
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Start
    TextComponent text_10
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = The actual experiment will begin now. Press SPACE to start.
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine questionnaire_1
    FormComponent question_4_form
      Data Format = rows
      Font = Open Sans
      Item Padding = 0.015
      Items = stimuli\question_1.csv
      Randomize = False
      Style = light
      Text Height = 0.025
      itemColor = white
      markerColor = red
      responseColor = white
      saveStartStop = False
      size = (0.7, 0.4)
      startVal [time (s)] = 0.0
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    MouseComponent Mouse_4
      clickable = finish_text_4
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent finish_text_4
      color = red
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Click here after you finish your answer.
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    TextComponent text_11
      letterHeight = 0.025
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        QUESTION PART 1: Read each statement and then circle the appropriate number to the right of the statement to indicate how you feel RIGHT NOW, that is, at THIS MOMENT. There are no right or wrong answers. Do not spend too much time on any one statement but give the answer which seems to describe your PRESENT feelings best.
        (1)  Not at all    (2) Somewhat    (3) Moderately so    (4) Very much so
        Please use dictionary if you do not understand any of the statements!
    TextComponent scroll_text_2
      color = black
      letterHeight = 0.03
      pos = (0.45, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        ↑
        Please
        scroll
        the red bar.
        ↓
  Routine Instruction_2
    ImageComponent image_8
      image = fear_rating_scale.png
      pos = (0, -0.03)
      size = (0.9, 0.8)
      startVal [time (s)] = 0.0
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    TextComponent text_9
      letterHeight = 0.03
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
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      text:
        You will be able to indicate your ratings on scales as shown below. Simply click your pointer on the desired rating.
    TextComponent text_13
      letterHeight = 0.03
      pos = (0, -0.45)
      startVal [time (s)] = 0.0
      text = Press SPACE to continue
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instruction_1
    TextComponent text_6
      letterHeight = 0.03
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        You will be shown images like the ones below:
    ImageComponent image_6
      image = stimuli\SHINEd_hface1.png
      pos = (0.3, 0.1)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_7
      image = stimuli\SHINEd_nface10.png
      pos = (-0.3, 0.1)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent text_7
      letterHeight = 0.03
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text = You will then be asked to rate how you feel about  the image on a scale
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    TextComponent text_8
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
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      text:
        Press SPACE to continue
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine questionnaire_2
    FormComponent question_4_form_2
      Data Format = rows
      Font = Open Sans
      Item Padding = 0.015
      Items = stimuli\question_2.csv
      Randomize = False
      Style = light
      Text Height = 0.025
      itemColor = white
      markerColor = red
      responseColor = white
      saveStartStop = False
      size = (0.7, 0.4)
      startVal [time (s)] = 0.0
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    MouseComponent Mouse
      clickable = finish_text_4
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent finish_text
      color = red
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Click here after you finish your answer.
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    TextComponent text_12
      letterHeight = 0.025
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        QUESTION PART 2: Read each statement and then circle the appropriate number to the right of the statement to indicate how you GENERALLY feel. There are no right or wrong answers. Do not spend too much time on any one statement but give the answer which seems to describe how you GENERALLY feel.
        (1)  Not at all    (2) Somewhat    (3) Moderately so    (4) Very much so
        Please use dictionary if you do not understand any of the statements!
    TextComponent scroll_text_3
      color = black
      letterHeight = 0.03
      pos = (0.45, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        ↑
        Please
        scroll
        the red bar.
        ↓
Flow
  Routine Intro
  Routine Instruction_1
  Routine Instruction_2
  Routine Start
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stimuli.csv
    loopType = random
    nReps = 2
    random seed = 1
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    conditions:
      [OrderedDict([('image', 'stimuli/SHINEd_hface1.png')]),
      OrderedDict([('image', 'stimuli/SHINEd_hface10.png')]),
      OrderedDict([('image', 'stimuli/SHINEd_hface2.png')]),
      OrderedDict([('image', 'stimuli/SHINEd_hface3.png')]),
      OrderedDict([('image', 'stimuli/SHINEd_hface4.png')]),
      OrderedDict([('image', 'stimuli/SHINEd_hface5.png')]),
      OrderedDict([('image', 'stimuli/SHINEd_hface6.png')]),
      OrderedDict([('image', 'stimuli/SHINEd_hface7.png')]),
      OrderedDict([('image', 'stimuli/SHINEd_hface8.png')]),
      OrderedDict([('image', 'stimuli/SHINEd_hface9.png')]),
      OrderedDict([('image', 'stimuli/SHINEd_hhand1.png')]),
      OrderedDict([('image', 'stimuli/SHINEd_hhand10.png')]),
      OrderedDict([('image', 'stimuli/SHINEd_hhand2.png')]),
      OrderedDict([('image', 'stimuli/SHINEd_hhand3.png')]),
      OrderedDict([('image', 'stimuli/SHINEd_hhand4.png')]),
      OrderedDict([('image', 'stimuli/SHINEd_hhand5.png')]),
      OrderedDict([('image', 'stimuli/SHINEd_hhand6.png')]),
      OrderedDict([('image', 'stimuli/SHINEd_hhand7.png')]),
      OrderedDict([('image', 'stimuli/SHINEd_hhand8.png')]),
      OrderedDict([('image', 'stimuli/SHINEd_hhand9.png')]),
      OrderedDict([('image', 'stimuli/SHINEd_nface1.png')]),
      OrderedDict([('image', 'stimuli/SHINEd_nface10.png')]),
      OrderedDict([('image', 'stimuli/SHINEd_nface2.png')]),
      OrderedDict([('image', 'stimuli/SHINEd_nface3.png')]),
      OrderedDict([('image', 'stimuli/SHINEd_nface4.png')]),
      OrderedDict([('image', 'stimuli/SHINEd_nface5.png')]),
      OrderedDict([('image', 'stimuli/SHINEd_nface6.png')]),
      OrderedDict([('image', 'stimuli/SHINEd_nface7.png')])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
    Routine trial
    Routine rating
  LoopTerminator trials
  Routine questionnaire_1
  Routine questionnaire_2
